OpenViBE-Scenario

GDF file reader => #0
  Filename = E:/mag/new_exps/boss/record-[2015.04.01-20.39.48].gdf
  Samples per buffer = 32
  Subtract physical minimum = False
#0.EEG stream -> Mitsar Channel Selector (Fp1,C3)
  Channel List = Fp1;C3
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename "Rename 2 Fpz;Cz"
  New channel names = Fpz;Cz
-> Temporal filter (stop 40-60Hz) => #3
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 40.00
  High cut frequency (Hz) = 60.00
  Pass band ripple (dB) = 0.1
-> Temporal filter (pass 4-8 Hz) => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 8
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
-> Spectral analysis => #6
  Spectral components = Amplitude
#6.Amplitude -> Power spectrum display
  Minimum frequency to display = 4
  Maximum frequency to display = 20
Signal=#4 -> Signal display "Signal after 4-8 (40-60) hz filtering"
  Time Scale = 2
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
#4 -> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #11
  Equation = log(1+x)
Signal=#11 -> Signal display "Signal DSP"
  Time Scale = 30
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
Input signal=#11 -> LSL Export (power signal)
  Stream name = OpenViBE Stream
  Stream type = EEG
#4 -> Spectral analysis => #14
  Spectral components = Amplitude
#14.Amplitude -> Select 4:8 Hz
  Frequencies to select = 4:8
-> Spectrum Average => #16
  Considers zeros = true
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 8
Signal=#16 -> Signal display "Theta-power display"
  Time Scale = 30
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
Input signal=#4 -> LSL Export (EEG signal)
  Stream name = OpenViBE Stream
  Stream type = EEGsignal
Signal=#3 -> Signal display "Signal after 40-60 Hz filtering"
  Time Scale = 2
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
