OpenViBE-Scenario

CSV File Reader
  Filename = E:/mag/experiments/all/gorin-record-[2014.12.03-15.31.44].csv
  Column separator = ;
  don't use the file time = false
  Samples per buffer = 32
-> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 20
  High cut frequency (Hz) = 60
  Pass band ripple (dB) = 1
Signal=#1 -> Signal display
  Time Scale = 10
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
#1 -> Temporal filter => #3
  Filter method = Chebychev
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 8
  Pass band ripple (dB) = 0.5
Signal=#3 -> Signal display
  Time Scale = 10
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
