OpenViBE-Scenario

CSV File Reader
  Filename = E:/mag/experiments/neurosky/zoya-record-[2014.12.05-13.54.52].csv
  Column separator = ;
  don't use the file time = false
  Samples per buffer = 32
-> Neurosky Channel Selector (electrode)
  Channel List = Electrode
  Action = Select
  Channel Matching Method = Smart
-> 0xc67a01dc Temporal filter (stop 40-60Hz) => #2
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 40.00
  High cut frequency (Hz) = 60.00
  Pass band ripple (dB) = 0.1
-> Temporal filter (pass 4-8 Hz) => #3
  Filter method = Butterworth
  Filter type = Low pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 8
  Pass band ripple (dB) = 1
-> Time based epoching
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
-> Spectral analysis => #5
  Spectral components = Amplitude
#5.Amplitude -> Power spectrum display
  Minimum frequency to display = 4
  Maximum frequency to display = 20
Signal=#3 -> Signal display "Signal after 4-8 (40-60) hz filtering"
  Time Scale = 2
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
#3 -> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #10
  Equation = log(1+x)
Signal=#10 -> Signal display "Signal DSP"
  Time Scale = 30
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
Input signal=#10 -> LSL Export (power signal)
  Stream name = OpenViBE Stream
  Stream type = EEG
#3 -> Spectral analysis => #13
  Spectral components = Amplitude
#13.Amplitude -> Select 4:8 Hz
  Frequencies to select = 4:8
-> Spectrum Average
  Considers zeros = true
-> Epoch average => #16
  Averaging type = Moving epoch average
  Epoch count = 8
Signal=#16 -> Signal display "Theta-power display"
  Time Scale = 30
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
Signal=#2 -> Signal display "Signal after 40-60 Hz filtering"
  Time Scale = 2
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
Input signal=#2 -> LSL Export (EEG signal)
  Stream name = OpenViBE Stream
  Stream type = EEGsignal
