OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Mitsar Channel Selector (Fp1,C3) => #1
  Channel List = Fp1;C3
  Action = Select
  Channel Matching Method = Smart
Signal=#1 -> 0xc67a01dc GDF file writer
  Filename = E:/mag/new_exps/boss/record-[$core{date}-$core{time}].gdf
#1 -> CSV File Writer
  Filename = E:/mag/new_exps/boss/record-[$core{date}-$core{time}].csv
  Column separator = ;
  Use compression = false
Signal=#1 -> EDF File Writer
  Filename = E:/mag/new_exps/boss/record-[$core{date}-$core{time}].edf
#1 -> Temporal filter (stop 40-60Hz) => #5
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 40.00
  High cut frequency (Hz) = 60.00
  Pass band ripple (dB) = 0.1
-> Temporal filter (pass 4-8 Hz) => #6
  Filter method = Butterworth
  Filter type = Low pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 8
  Pass band ripple (dB) = 1
-> Time based epoching
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
-> Spectral analysis => #8
  Spectral components = Amplitude
#8.Amplitude -> Power spectrum display
  Minimum frequency to display = 4
  Maximum frequency to display = 20
Signal=#6 -> Signal display "Signal after 4-8 (40-60) hz filtering"
  Time Scale = 2
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
#6 -> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #13
  Equation = log(1+x)
Signal=#13 -> Signal display "Signal DSP"
  Time Scale = 30
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
Input signal=#13 -> LSL Export (power signal)
  Stream name = OpenViBE Stream
  Stream type = EEG
#6 -> Spectral analysis => #16
  Spectral components = Amplitude
#16.Amplitude -> Select 4:8 Hz
  Frequencies to select = 4:8
-> Spectrum Average
  Considers zeros = true
-> Epoch average => #19
  Averaging type = Moving epoch average
  Epoch count = 8
Signal=#19 -> Signal display "Theta-power display"
  Time Scale = 30
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
Signal=#5 -> Signal display "Signal after 40-60 Hz filtering"
  Time Scale = 2
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
Input signal=#5 -> LSL Export (EEG signal)
  Stream name = OpenViBE Stream
  Stream type = EEGsignal
